graphs:

  - id: acquisition
    nodes:
    - id: arduino
      module: timeflux_serial.nodes.driver
      class: SerialDevice
      params:
        port: /dev/tty.SLAB_USBtoUART
        rate: 1
    - id: publish
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: arduino
    edges:
    - source: arduino
      target: publish
    rate: 1

  # - id: display
  #   nodes:
  #   - id: subscribe
  #     module: timeflux.nodes.zmq
  #     class: Sub
  #     params:
  #       topics: [ arduino ]
  #   - id: debug
  #     module: timeflux.nodes.debug
  #     class: Display
  #   edges:
  #     - source: subscribe:arduino
  #       target: debug
  #   rate: 1

  - id: broker
    nodes:
    - id: broker
      module: timeflux.nodes.zmq
      class: Broker
